PsychoPy2experiment version="2024.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = test1
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine hello
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    TextComponent Hello
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Hello! This is a test from VLIS LAB.

        We will get your EEG signals when you look at the selected images. Please stay focused.

        Thank you for your efforts!
  Routine textBlock1
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Automobile
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    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent readText
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 2.0
      text = Please read the word "Automobile".
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    TextComponent fixation2
      letterHeight = 0.05
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 1.0
      text = +
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    ParallelOutComponent p_port
      address = 0x5FF8
      register = EIO
      startData = 1
      startVal [condition] = text.status==STARTED
      stopData = 2
      stopVal [duration (s)] = 2.0
      syncScreen = True
      syncScreenRefresh = False
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  Routine quickTextBlock1
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    TextComponent quickText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = Automobile
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    ParallelOutComponent p_port2
      address = 0x5FF8
      register = EIO
      startData = 10
      startVal [time (s)] = 0.0
      stopData = 11
      stopVal [duration (s)] = 0.2
      syncScreen = True
      syncScreenRefresh = False
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    TextComponent quickfixation
      letterHeight = 0.05
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 0.1
      text = +
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  Routine quickTextBlock2
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    TextComponent quickText_2
      letterHeight = 0.05
      startVal [time (s)] = 0.00
      stopVal [duration (s)] = 0.05
      text = Automobile
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    ParallelOutComponent p_port2_2
      address = 0x5FF8
      register = EIO
      startData = 12
      startVal [time (s)] = 0.0
      stopData = 13
      stopVal [duration (s)] = 0.05
      syncScreen = True
      syncScreenRefresh = False
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    TextComponent quickfixation_2
      letterHeight = 0.05
      startVal [time (s)] = 0.05
      stopVal [duration (s)] = 0.05
      text = +
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  Routine imageBlock1
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    ImageComponent image
      image [set every repeat] = $Pic
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.05
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    ParallelOutComponent p_port3
      address = 0x5FF8
      register = EIO
      startData = 100
      startVal [time (s)] = 0.0
      stopData = 101
      stopVal [duration (s)] = 0.05
      syncScreen = True
      syncScreenRefresh = False
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    TextComponent fixation_2
      letterHeight = 0.05
      startVal [time (s)] = 0.05
      stopVal [duration (s)] = 0.05
      text = +
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  Routine part1
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    TextComponent Part1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Look and read
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  Routine quicklooktext
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    TextComponent quickLookText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = take a glance at the text
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  Routine Part3
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    TextComponent quicklookImage
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text = look at the image and think
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  Routine imageBlock2
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    ImageComponent image_2
      image [set every repeat] = $Pic
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.05
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    ParallelOutComponent p_port2_3
      address = 0x5FF8
      register = EIO
      startData = 102
      startVal [time (s)] = 0.0
      stopData = 103
      stopVal [duration (s)] = 0.05
      syncScreen = True
      syncScreenRefresh = False
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    TextComponent quickfixation_3
      letterHeight = 0.05
      startVal [time (s)] = 0.05
      stopVal [duration (s)] = 0.05
      text = +
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  Routine Part3_first
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = look at the image and think
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Flow
  Routine hello
  Routine part1
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine textBlock1
  LoopTerminator trials
  Routine quicklooktext
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine quickTextBlock1
  LoopTerminator trials_2
  Routine quicklooktext
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine quickTextBlock2
  LoopTerminator trials_3
  Routine Part3_first
  LoopInitiator trials_4 loopType="TrialHandler"
    Selected rows = 0:1000
    conditionsFile = cifar10png/automobile_train.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Pic': 'cifar10png\\train\\horse\\3975.png'},
      {'Pic': 'cifar10png\\train\\horse\\1804.png'},
      {'Pic': 'cifar10png\\train\\horse\\4968.png'},
      {'Pic': 'cifar10png\\train\\horse\\1810.png'},
      {'Pic': 'cifar10png\\train\\horse\\3961.png'},
      {'Pic': 'cifar10png\\train\\horse\\0298.png'},
      {'Pic': 'cifar10png\\train\\horse\\1186.png'},
      {'Pic': 'cifar10png\\train\\horse\\3949.png'},
      {'Pic': 'cifar10png\\train\\horse\\3791.png'},
      {'Pic': 'cifar10png\\train\\horse\\4798.png'},
      {'Pic': 'cifar10png\\train\\horse\\4940.png'},
      {'Pic': 'cifar10png\\train\\horse\\1838.png'},
      {'Pic': 'cifar10png\\train\\horse\\4954.png'},
      {'Pic': 'cifar10png\\train\\horse\\3785.png'},
      {'Pic': 'cifar10png\\train\\horse\\1192.png'},
      {'Pic': 'cifar10png\\train\\horse\\1179.png'},
      {'Pic': 'cifar10png\\train\\horse\\0267.png'},
      {'Pic': 'cifar10png\\train\\horse\\4001.png'},
      {'Pic': 'cifar10png\\train\\horse\\2470.png'},
      {'Pic': 'cifar10png\\train\\horse\\2316.png'},
      {'Pic': 'cifar10png\\train\\horse\\4767.png'},
      {'Pic': 'cifar10png\\train\\horse\\3008.png'},
      {'Pic': 'cifar10png\\train\\horse\\0501.png'},
      {'Pic': 'cifar10png\\train\\horse\\0515.png'},
      {'Pic': 'cifar10png\\train\\horse\\2302.png'},
      {'Pic': 'cifar10png\\train\\horse\\4773.png'},
      {'Pic': 'cifar10png\\train\\horse\\4015.png'},
      {'Pic': 'cifar10png\\train\\horse\\2464.png'},
      {'Pic': 'cifar10png\\train\\horse\\0273.png'},
      {'Pic': 'cifar10png\\train\\horse\\3752.png'},
      {'Pic': 'cifar10png\\train\\horse\\1145.png'},
      {'Pic': 'cifar10png\\train\\horse\\1623.png'},
      {'Pic': 'cifar10png\\train\\horse\\4983.png'}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
    Routine imageBlock1
    Routine quickTextBlock2
  LoopTerminator trials_4
  Routine Part3
  LoopInitiator trials_5 loopType="TrialHandler"
    Selected rows = 1001:2000
    conditionsFile = cifar10png/automobile_train.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine imageBlock1
    Routine quickTextBlock2
  LoopTerminator trials_5
  Routine Part3
  LoopInitiator trials_6 loopType="TrialHandler"
    Selected rows = 2001:3000
    conditionsFile = cifar10png/automobile_train.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine imageBlock1
    Routine quickTextBlock2
  LoopTerminator trials_6
  Routine Part3
  LoopInitiator trials_7 loopType="TrialHandler"
    Selected rows = 3001:4000
    conditionsFile = cifar10png/automobile_train.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine imageBlock1
    Routine quickTextBlock2
  LoopTerminator trials_7
  Routine Part3
  LoopInitiator trials_8 loopType="TrialHandler"
    Selected rows = 4001:5000
    conditionsFile = cifar10png/automobile_train.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine imageBlock1
    Routine quickTextBlock2
  LoopTerminator trials_8
